CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<treatment>[\w]+)-(?P<cell>[\w]+)-(?P<hour>.*)\\(?P<Site>[0-9]{1,2})$
    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (file does contain "BF_2") (file does contain "BF_3") (file does contain "BF_1") (file does contain "AA") (file does contain "DD") (file does contain "DA") (file does contain "mask_img") (file does contain "ED.jpg") (file does contain "ED.tif")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:8
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "AA")
    Name to assign these images:AA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DA")
    Name to assign these images:DA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DD")
    Name to assign these images:DD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_1")
    Name to assign these images:BF_1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_2")
    Name to assign these images:BF_2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_3")
    Name to assign these images:BF_3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "ED.tif") (file does contain "ED.jpg")
    Name to assign these images:ED
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask_img")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:treatment

ConvertImageToObjects:[module_num:5|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
    Select the input image:Mask
    Name the output object:MaskObject
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FilterObjects:[module_num:6|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
    Select the objects to filter:MaskObject
    Name the output objects:delBorderObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:delBorderObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:delBorderObjects
    Name the output objects:ConvertImageToObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:10000
    Filter using a maximum measurement value?:Yes
    Maximum value:62500
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:ConvertImageToObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureColocalization:[module_num:10|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
    Select images to measure:AA, DA, DD
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:ConvertImageToObjects
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:ED
    Select objects to measure:ConvertImageToObjects

MeasureTexture:[module_num:12|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
    Select images to measure:AA, DA, DD
    Select objects to measure:ConvertImageToObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:10

MeasureObjectIntensityDistribution:[module_num:13|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
    Select images to measure:ED
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:ConvertImageToObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ConvertImageToObjects|Texture_DifferenceVariance_DA_10_01_256,ConvertImageToObjects|Texture_DifferenceVariance_DA_10_03_256,ConvertImageToObjects|Texture_DifferenceVariance_DA_10_02_256,ConvertImageToObjects|Texture_DifferenceVariance_DA_10_00_256,ConvertImageToObjects|Texture_DifferenceVariance_AA_10_00_256,ConvertImageToObjects|Texture_DifferenceVariance_AA_10_03_256,ConvertImageToObjects|Texture_DifferenceVariance_AA_10_02_256,ConvertImageToObjects|Texture_DifferenceVariance_AA_10_01_256,ConvertImageToObjects|Texture_DifferenceVariance_DD_10_02_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20240716_Huh7_
    Overwrite existing files without warning?:Yes
    Data to export:ConvertImageToObjects
    Combine these object measurements with those of the previous object?:No
    File name:FI.csv
    Use the object name for the file name?:No

MeasureTexture:[module_num:15|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
    Select images to measure:BF_1, BF_2, BF_3
    Select objects to measure:ConvertImageToObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:10

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ConvertImageToObjects|Texture_DifferenceVariance_BF_1_10_00_256,ConvertImageToObjects|Texture_DifferenceVariance_BF_1_10_02_256,ConvertImageToObjects|Texture_DifferenceVariance_BF_1_10_03_256,ConvertImageToObjects|Texture_DifferenceVariance_BF_1_10_01_256,ConvertImageToObjects|Texture_DifferenceVariance_BF_3_10_00_256,ConvertImageToObjects|Texture_DifferenceVariance_BF_3_10_03_256,ConvertImageToObjects|Texture_DifferenceVariance_BF_3_10_01_256,ConvertImageToObjects|Texture_DifferenceVariance_BF_3_10_02_256,ConvertImageToObjects|Texture_DifferenceVariance_BF_2_10_01_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20240716_Huh7_
    Overwrite existing files without warning?:Yes
    Data to export:ConvertImageToObjects
    Combine these object measurements with those of the previous object?:No
    File name:BF.csv
    Use the object name for the file name?:No
