CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<cell>[\w]+)-(?P<treatment>[\w]+)-(?P<hour>[0-9]{1,2})h\\(?P<Site>[0-9]{1,2})$
    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (file does contain "BF_2") (file does contain "BF_3") (file does contain "BF_1") (file does contain "AA") (file does contain "DD") (file does contain "DA") (file does contain "mask_img.png")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "AA")
    Name to assign these images:AA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DA")
    Name to assign these images:DA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DD")
    Name to assign these images:DD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_1")
    Name to assign these images:BF_1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_2")
    Name to assign these images:BF_2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_3")
    Name to assign these images:BF_3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask_img")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:cell
    Metadata category:treatment
    Metadata category:hour

ConvertImageToObjects:[module_num:5|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
    Select the input image:Mask
    Name the output object:MaskObject
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FilterObjects:[module_num:6|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
    Select the objects to filter:MaskObject
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:MaskObject
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Number_Object_Number
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:8|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
    Select images to measure:BF_1, BF_2, BF_3
    Select objects to measure:FilterObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:10

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:FilterObjects|Texture_Entropy_BF_1_10_01_256,FilterObjects|Texture_Entropy_BF_1_10_03_256,FilterObjects|Texture_Entropy_BF_1_10_00_256,FilterObjects|Texture_Entropy_BF_1_10_02_256,FilterObjects|Texture_Entropy_BF_2_10_02_256,FilterObjects|Texture_Entropy_BF_2_10_03_256,FilterObjects|Texture_Entropy_BF_2_10_01_256,FilterObjects|Texture_Entropy_BF_2_10_00_256,FilterObjects|Texture_Entropy_BF_3_10_00_256,FilterObjects|Texture_Entropy_BF_3_10_01_256,FilterObjects|Texture_Entropy_BF_3_10_03_256,FilterObjects|Texture_Entropy_BF_3_10_02_256,FilterObjects|AreaShape_FormFactor,Image|Metadata_hour,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20240803_
    Overwrite existing files without warning?:Yes
    Data to export:FilterObjects
    Combine these object measurements with those of the previous object?:No
    File name:BF.csv
    Use the object name for the file name?:No
